---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title LDT
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1010
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\jasmi\\Downloads"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define sketchpad Datenschutz
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=always text="Thank you for your participation. Before starting, please read the following data protection information carefully and confirm your agreement:<br /><br />Anonymization: All your data (questionnaire, LEXTale test, reaction times, and accuracy) will be treated with strict confidentiality. Storage and evaluation will be carried out exclusively in pseudonymized form (e.g., under a code number such as 1001). It will not be possible to identify you personally in the subsequent analysis.<br /><br />Purpose of Use: The collected data will be used exclusively for scientific purposes within the framework of this seminar project. Commercial use or disclosure to third parties is prohibited.<br /><br />Voluntariness & Right to Withdraw: Your participation is entirely voluntary. You have the right to withdraw from the experiment at any time and without giving reasons, without incurring any disadvantages. In the event of withdrawal, your data collected up to that point will be deleted.<br /><br />By continuing the experiment, you confirm that you have read and understood this information and agree to the anonymous processing of your data.<br />Press Space to continue." x=0 y=0 z_index=0

define keyboard_response Datenschutz_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad break_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="You have completed the first part of the experiment!<br /><br /><br />Take a break until you feel ready to continue.<br />Press Space to complete the rest of the experiment." x=6 y=-16 z_index=0

define sketchpad break_1_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="You have conplete part of the experiment!<br />Take a break please until you think you are ready to continue.<br />Press Space to complete the rest of the experiment." x=6 y=-16 z_index=0

define keyboard_response break_1_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response break_1_keyboard_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response break_2_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response break_2_keyboard_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad break_2_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="You have completed the second part of the experiment!<br /><br /><br />Take a break until you feel ready to continue.<br />Press Space to complete the rest of the experiment." x=6 y=-16 z_index=0

define sketchpad break_2_sketchpad_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="You have conplete part of the experiment!<br />Take a break please until you think you are ready to continue.<br />Press Space to complete the rest of the experiment." x=0 y=0 z_index=0

define sketchpad end_of_exp
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Thank You!<br /><br />You have completed the experiment. <br />Please press Space to end this experimnet.<br />Thank you very much for your participation!" x=0 y=0 z_index=0

define keyboard_response end_of_exp_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad end_of_prac
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="This is the end of the practice.<br /><br /><br />Now let's begin our experiment!<br />Please press Space to start." x=0 y=0 z_index=0

define keyboard_response end_of_prac_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run participants always
	run instructions always
	run instructions_keyboard_response always
	run practice_loop always
	run end_of_prac always
	run end_of_prac_keyboard_response always
	run experimental_loop always
	run end_of_exp always
	run end_of_exp_keyboard_response always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 180
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Experiment LDT
	setcycle 0 Item_type exp
	setcycle 0 Stimulus BEAUTY
	setcycle 0 Condition word
	setcycle 0 Cognate_status noncognate
	setcycle 0 Emotional_valence positive
	setcycle 0 Length 6
	setcycle 0 Lg10SUBTLEX_US 3.391111614
	setcycle 0 correct_response j
	setcycle 0 new_column_1 ""
	setcycle 0 new_column_2 ""
	setcycle 0 new_column_3 ""
	setcycle 0 new_column_4 ""
	setcycle 0 new_column_5 ""
	setcycle 0 new_column_6 ""
	setcycle 0 new_column_7 ""
	setcycle 0 new_column_8 ""
	setcycle 0 new_column_9 ""
	setcycle 0 new_column_10 ""
	setcycle 0 new_column_11 ""
	setcycle 0 new_column_12 ""
	setcycle 0 new_column_13 ""
	setcycle 0 new_column_14 ""
	setcycle 0 new_column_15 ""
	setcycle 0 new_column_16 ""
	setcycle 0 new_column_17 ""
	setcycle 1 Experiment LDT
	setcycle 1 Item_type exp
	setcycle 1 Stimulus CARE
	setcycle 1 Condition word
	setcycle 1 Cognate_status noncognate
	setcycle 1 Emotional_valence positive
	setcycle 1 Length 4
	setcycle 1 Lg10SUBTLEX_US 4.393557656
	setcycle 1 correct_response j
	setcycle 1 new_column_1 ""
	setcycle 1 new_column_2 ""
	setcycle 1 new_column_3 ""
	setcycle 1 new_column_4 ""
	setcycle 1 new_column_5 ""
	setcycle 1 new_column_6 ""
	setcycle 1 new_column_7 ""
	setcycle 1 new_column_8 ""
	setcycle 1 new_column_9 ""
	setcycle 1 new_column_10 ""
	setcycle 1 new_column_11 ""
	setcycle 1 new_column_12 ""
	setcycle 1 new_column_13 ""
	setcycle 1 new_column_14 ""
	setcycle 1 new_column_15 ""
	setcycle 1 new_column_16 ""
	setcycle 1 new_column_17 ""
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	setcycle 6 Experiment LDT
	setcycle 6 Item_type exp
	setcycle 6 Stimulus FUN
	setcycle 6 Condition word
	setcycle 6 Cognate_status noncognate
	setcycle 6 Emotional_valence positive
	setcycle 6 Length 3
	setcycle 6 Lg10SUBTLEX_US 4.079579167
	setcycle 6 correct_response j
	setcycle 6 new_column_1 ""
	setcycle 6 new_column_2 ""
	setcycle 6 new_column_3 ""
	setcycle 6 new_column_4 ""
	setcycle 6 new_column_5 ""
	setcycle 6 new_column_6 ""
	setcycle 6 new_column_7 ""
	setcycle 6 new_column_8 ""
	setcycle 6 new_column_9 ""
	setcycle 6 new_column_10 ""
	setcycle 6 new_column_11 ""
	setcycle 6 new_column_12 ""
	setcycle 6 new_column_13 ""
	setcycle 6 new_column_14 ""
	setcycle 6 new_column_15 ""
	setcycle 6 new_column_16 ""
	setcycle 6 new_column_17 ""
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	setcycle 8 Experiment LDT
	setcycle 8 Item_type exp
	setcycle 8 Stimulus PEACE
	setcycle 8 Condition word
	setcycle 8 Cognate_status noncognate
	setcycle 8 Emotional_valence positive
	setcycle 8 Length 5
	setcycle 8 Lg10SUBTLEX_US 3.550350672
	setcycle 8 correct_response j
	setcycle 8 new_column_1 ""
	setcycle 8 new_column_2 ""
	setcycle 8 new_column_3 ""
	setcycle 8 new_column_4 ""
	setcycle 8 new_column_5 ""
	setcycle 8 new_column_6 ""
	setcycle 8 new_column_7 ""
	setcycle 8 new_column_8 ""
	setcycle 8 new_column_9 ""
	setcycle 8 new_column_10 ""
	setcycle 8 new_column_11 ""
	setcycle 8 new_column_12 ""
	setcycle 8 new_column_13 ""
	setcycle 8 new_column_14 ""
	setcycle 8 new_column_15 ""
	setcycle 8 new_column_16 ""
	setcycle 8 new_column_17 ""
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	setcycle 60 Experiment LDT
	setcycle 60 Item_type exp
	setcycle 60 Stimulus ARREST
	setcycle 60 Condition word
	setcycle 60 Cognate_status noncognate
	setcycle 60 Emotional_valence negative
	setcycle 60 Length 6
	setcycle 60 Lg10SUBTLEX_US 3.48258777
	setcycle 60 correct_response j
	setcycle 60 new_column_1 ""
	setcycle 60 new_column_2 ""
	setcycle 60 new_column_3 ""
	setcycle 60 new_column_4 ""
	setcycle 60 new_column_5 ""
	setcycle 60 new_column_6 ""
	setcycle 60 new_column_7 ""
	setcycle 60 new_column_8 ""
	setcycle 60 new_column_9 ""
	setcycle 60 new_column_10 ""
	setcycle 60 new_column_11 ""
	setcycle 60 new_column_12 ""
	setcycle 60 new_column_13 ""
	setcycle 60 new_column_14 ""
	setcycle 60 new_column_15 ""
	setcycle 60 new_column_16 ""
	setcycle 60 new_column_17 ""
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	setcycle 90 Experiment LDT
	setcycle 90 Item_type exp
	setcycle 90 Stimulus STOMOCH
	setcycle 90 Condition nonword
	setcycle 90 Cognate_status noncognate
	setcycle 90 Emotional_valence neutral
	setcycle 90 Length 7
	setcycle 90 Lg10SUBTLEX_US "#N/A"
	setcycle 90 correct_response f
	setcycle 90 new_column_1 ""
	setcycle 90 new_column_2 ""
	setcycle 90 new_column_3 ""
	setcycle 90 new_column_4 ""
	setcycle 90 new_column_5 ""
	setcycle 90 new_column_6 ""
	setcycle 90 new_column_7 ""
	setcycle 90 new_column_8 ""
	setcycle 90 new_column_9 ""
	setcycle 90 new_column_10 ""
	setcycle 90 new_column_11 ""
	setcycle 90 new_column_12 ""
	setcycle 90 new_column_13 ""
	setcycle 90 new_column_14 ""
	setcycle 90 new_column_15 ""
	setcycle 90 new_column_16 ""
	setcycle 90 new_column_17 ""
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	constrain correct_response maxrep=3
	run trial_sequence

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Welcome to this experiment.<br />You will be presented with strings of letters on the screen. <br />Your task is to decide whether each string is a real existing English word.<br /> <br /> <br />Please respond as quickly as possible:<br />Is it a real word? → Press J.<br />Is it not a real word? → Press F.<br /> <br /><br />First, you will complete a small practice to help you understand the task.<br />Press the space bar to start." x=-3.0 y=-28.0 z_index=0

define keyboard_response instructions_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes

define inline_script participants
	set description "Executes Python code"
	set _run "var.Participant = var.subject_nr "
	set _prepare ""

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Experiment LDT
	setcycle 0 Item_type prac
	setcycle 0 Stimulus HONEY
	setcycle 0 Condition word
	setcycle 0 Cognate_status noncognate
	setcycle 0 Emotional_Valenz positive
	setcycle 0 Length 5
	setcycle 0 Lg10SUBTLEX_US 4.185428821
	setcycle 0 correct_response j
	setcycle 1 Experiment LDT
	setcycle 1 Item_type prac
	setcycle 1 Stimulus FLOWER
	setcycle 1 Condition word
	setcycle 1 Cognate_status noncognate
	setcycle 1 Emotional_Valenz positive
	setcycle 1 Length 6
	setcycle 1 Lg10SUBTLEX_US 3.065206128
	setcycle 1 correct_response j
	setcycle 2 Experiment LDT
	setcycle 2 Item_type prac
	setcycle 2 Stimulus GROUND
	setcycle 2 Condition word
	setcycle 2 Cognate_status noncognate
	setcycle 2 Emotional_Valenz neutral
	setcycle 2 Length 6
	setcycle 2 Lg10SUBTLEX_US 3.567849451
	setcycle 2 correct_response j
	setcycle 3 Experiment LDT
	setcycle 3 Item_type prac
	setcycle 3 Stimulus SQUARE
	setcycle 3 Condition word
	setcycle 3 Cognate_status noncognate
	setcycle 3 Emotional_Valenz neutral
	setcycle 3 Length 6
	setcycle 3 Lg10SUBTLEX_US 3.209783015
	setcycle 3 correct_response j
	setcycle 4 Experiment LDT
	setcycle 4 Item_type prac
	setcycle 4 Stimulus LOSS
	setcycle 4 Condition word
	setcycle 4 Cognate_status noncognate
	setcycle 4 Emotional_Valenz negative
	setcycle 4 Length 4
	setcycle 4 Lg10SUBTLEX_US 3.172018809
	setcycle 4 correct_response j
	setcycle 5 Experiment LDT
	setcycle 5 Item_type prac
	setcycle 5 Stimulus CRACK
	setcycle 5 Condition word
	setcycle 5 Cognate_status noncognate
	setcycle 5 Emotional_Valenz negative
	setcycle 5 Length 5
	setcycle 5 Lg10SUBTLEX_US 3.224274014
	setcycle 5 correct_response j
	setcycle 6 Experiment LDT
	setcycle 6 Item_type prac
	setcycle 6 Stimulus ASSIGH
	setcycle 6 Condition nonword
	setcycle 6 Cognate_status noncognate
	setcycle 6 Emotional_Valenz neutral
	setcycle 6 Length 6
	setcycle 6 Lg10SUBTLEX_US "#N/A"
	setcycle 6 correct_response f
	setcycle 7 Experiment LDT
	setcycle 7 Item_type prac
	setcycle 7 Stimulus INVALVE
	setcycle 7 Condition nonword
	setcycle 7 Cognate_status noncognate
	setcycle 7 Emotional_Valenz neutral
	setcycle 7 Length 7
	setcycle 7 Lg10SUBTLEX_US "#N/A"
	setcycle 7 correct_response f
	setcycle 8 Experiment LDT
	setcycle 8 Item_type prac
	setcycle 8 Stimulus VORMIN
	setcycle 8 Condition nonword
	setcycle 8 Cognate_status noncognate
	setcycle 8 Emotional_Valenz negative
	setcycle 8 Length 6
	setcycle 8 Lg10SUBTLEX_US "#N/A"
	setcycle 8 correct_response f
	setcycle 9 Experiment LDT
	setcycle 9 Item_type prac
	setcycle 9 Stimulus SLAR
	setcycle 9 Condition nonword
	setcycle 9 Cognate_status noncognate
	setcycle 9 Emotional_Valenz negative
	setcycle 9 Length 4
	setcycle 9 Lg10SUBTLEX_US "#N/A"
	setcycle 9 correct_response f
	setcycle 10 Experiment LDT
	setcycle 10 Item_type prac
	setcycle 10 Stimulus DILIGHT
	setcycle 10 Condition nonword
	setcycle 10 Cognate_status noncognate
	setcycle 10 Emotional_Valenz positive
	setcycle 10 Length 7
	setcycle 10 Lg10SUBTLEX_US "#N/A"
	setcycle 10 correct_response f
	setcycle 11 Experiment LDT
	setcycle 11 Item_type prac
	setcycle 11 Stimulus GERL
	setcycle 11 Condition nonword
	setcycle 11 Cognate_status noncognate
	setcycle 11 Emotional_Valenz positive
	setcycle 11 Length 4
	setcycle 11 Lg10SUBTLEX_US "#N/A"
	setcycle 11 correct_response f
	constrain correct_response maxrep=3
	run trial_sequence

define sketchpad stimulus
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="[Stimulus]" x=0 y=0 z_index=0

define sketchpad stimulus_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="[Stimulus]" x=0 y=0 z_index=0

define keyboard_response stimulus_keyboard_response
	set timeout 2500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define keyboard_response stimulus_keyboard_response_1
	set timeout 2500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run stimulus always
	run stimulus_keyboard_response always
	run variables always
	run logger always
	run break_1 "[count_trial_sequence] = 59"
	run break_1_keyboard_response "[count_trial_sequence] = 59"
	run break_2_sketchpad "[count_trial_sequence] = 119"
	run break_2_keyboard_response "[count_trial_sequence] = 119"

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1 always
	run stimulus_1 always
	run stimulus_keyboard_response_1 always
	run variables_1 always
	run logger_1 always
	run break_1_1 "[count_trial_sequence] = 59"
	run break_1_keyboard_response_1 "[count_trial_sequence] = 59"
	run break_2_sketchpad_1 "[count_trial_sequence] = 119"
	run break_2_keyboard_response_1 "[count_trial_sequence] = 119"

define inline_script variables
	set description "Executes Python code"
	___run__
	var.RT = var.response_time_stimulus_keyboard_response 
	var.Accuracy = var.correct
	__end__
	set _prepare ""

define inline_script variables_1
	set description "Executes Python code"
	___run__
	var.RT = var.response_time_stimulus_keyboard_response 
	var.Accuracy = var.correct
	__end__
	set _prepare ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

